PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.5,0.5,0.5]
  expName = test
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Routines
  Routine ShowImage
    ImageComponent Image
      image [set every repeat] = $current_image_path
      size [set every repeat] = [width, height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      units = pix
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    KeyboardComponent response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        #eeg_rec.refresh()
        #eeg_rec.set_event(hash("DisplayImage" + str(current_idx)))
        #thisExp.addData("ImagePath", inbook.iloc[current_idx]["ImagePath"])
  Routine AskToContinue
    TextComponent continuQuestion
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Möchtest du weitermachen?
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    KeyboardComponent stop
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine codeStartup
    CodeComponent codeInit
      Code Type = Py
      Before Experiment:
        import random, xlrd
        import socket
        import pandas as pd

        global current_image_path

        random.seed()

        in_file = "conditions.xlsx"
        example_file = "example_conditions.xlsx"
        syntax_file = "syntax_conditions.xlsx"

        syntax_idx = 0
        num_items = 32
        num_iter = 5
        idx_values = [x for x in range(num_items)]

        TCP_IP = 'localhost'
        TCP_PORT = 50000
        Message = 1

        from psychopy import monitors

        mon = None
        for tmp_mon in monitors.getAllMonitors():
            mon = tmp_mon

        width = monitors.Monitor(mon).getSizePix()[0]
        height = monitors.Monitor(mon).getSizePix()[1]
        ll = -0.8 * width
        lm = -0.4 * width
        mm = 0.0 * width
        rm = 0.4 * width
        rr = 0.8 * width
        md = -0.1 * height
        mu = 0.2 * height
      Begin Experiment:
        #open execl
        inbook = pd.read_excel(in_file)
        example_df = pd.read_excel(example_file)
        syntax_df = pd.read_excel(syntax_file)

        random.shuffle(idx_values)
        current_idx = idx_values.pop(0)
  Routine SendSignal
    CodeComponent sender
      Code Type = Py
      End Routine:
        #s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        #s.connect((TCP_IP, TCP_PORT))
        #s.send(Message.to_bytes(1, 'big'))
        #Message = Message + 1
        #s.close()
  Routine ShowInput
    ImageComponent image
      image [set every repeat] = $current_input_path
      size [set every repeat] = [input_width, input_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      store = nothing
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        eeg_rec.refresh()
        eeg_rec.set_event(hash("ShowInput" + str(current_idx)))
        thisExp.addData("InputPath", inbook.iloc[current_idx]["InputPath"])
  Routine SetVariables
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import random
      Begin Routine:
        eeg_rec.refresh()
        eeg_rec.set_event(current_idx)

        current_image_path = inbook.iloc[current_idx]["ImagePath"]
        width = inbook.iloc[current_idx]["ImagePathWidth"]
        height = inbook.iloc[current_idx]["ImagePathHeight"]

        current_input_path = inbook.iloc[current_idx]["InputPath"]
        input_width = inbook.iloc[current_idx]["InputPathWidth"]
        input_height = inbook.iloc[current_idx]["InputPathHeight"]

        right_path = inbook.iloc[current_idx]["RightPath"]
        right_width = inbook.iloc[current_idx]["RightPathWidth"]
        right_height = inbook.iloc[current_idx]["RightPathHeight"]

        wrong1_input_path = inbook.iloc[current_idx]["Wrong1Path"]
        wrong1_width = inbook.iloc[current_idx]["Wrong1PathWidth"]
        wrong1_height = inbook.iloc[current_idx]["Wrong1PathHeight"]

        wrong2_input_path = inbook.iloc[current_idx]["Wrong2Path"]
        wrong2_width = inbook.iloc[current_idx]["Wrong2PathWidth"]
        wrong2_height = inbook.iloc[current_idx]["Wrong2PathHeight"]

        dk_input_path = inbook.iloc[current_idx]["DontKnowPath"]
        dk_width = inbook.iloc[current_idx]["DontKnowPathWidth"]
        dk_height = inbook.iloc[current_idx]["DontKnowPathHeight"]

        next_input_path = inbook.iloc[current_idx]["NextPath"]
        next_width = inbook.iloc[current_idx]["NextPathWidth"]
        next_height = inbook.iloc[current_idx]["NextPathHeight"]

        answer_array = [right_path, wrong1_input_path, wrong2_input_path]
        width_array = [right_width, wrong1_width, wrong2_width]
        height_array = [right_height, wrong1_height, wrong2_height]

        answer_idx = [0,1,2]
        random.shuffle(answer_idx)
  Routine updateIndex
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        current_idx = idx_values.pop(0)
  Routine ShowOptions
    ImageComponent image_1
      image [set every repeat] = $answer_array[answer_idx[0]]
      pos [set every repeat] = (ll, 0)
      size [set every repeat] = [width_array[answer_idx[0]], height_array[answer_idx[0]]]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent image_2
      image [set every repeat] = $answer_array[answer_idx[1]]
      pos [set every repeat] = (lm, 0)
      size [set every repeat] = [width_array[answer_idx[1]], height_array[answer_idx[1]]]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent image_3
      image [set every repeat] = $answer_array[answer_idx[2]]
      pos [set every repeat] = (mm, 0)
      size [set every repeat] = [width_array[answer_idx[2]], height_array[answer_idx[2]]]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent image_4
      image [set every repeat] = $dk_input_path
      pos [set every repeat] = (rm, 0)
      size [set every repeat] = [dk_width, dk_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent image_5
      image [set every repeat] = $next_input_path
      pos [set every repeat] = (rr, 0)
      size [set every repeat] = [next_width, next_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent arrow
      image [set every repeat] = Resources/arrow.png
      pos [set every frame] = (arrow_position, md)
      size = (86, 54)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        from psychopy.hardware import keyboard
        from psychopy import core

        eeg_rec.refresh()
        eeg_rec.set_event(hash("GetInput" + str(current_idx)))
        thisExp.addData("ImagePathInputs", inbook.iloc[current_idx]["ImagePath"])

        kb = keyboard.Keyboard()

        answers = []
        current = 0
        position_array = [ll, lm, mm, rm, rr]
        arrow_position = position_array[current]
      Each Frame:
        keys = kb.getKeys(['right', 'left'], waitRelease=True)
        if 'left' in keys:
            current = current - 1

        if 'right' in keys:
            current = current + 1

        current = max(0, current)
        current = min(4, current)

        arrow_position = position_array[current]
      End Routine:
        answer = ""
        if current == 0:
            answer = answer_array[answer_idx[0]]
        elif current == 1:
            answer = answer_array[answer_idx[1]]
        elif current == 2:
            answer = answer_array[answer_idx[2]]
        elif current == 3:
            answer = "None"
        else:
            answer = "Skipped"


        thisExp.addData("ChoosenAnwer", answer)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Hello
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank, dass Sie an dieser Studie teilnehmen.

        In dieser Studie werden wir Ihnen kurze Java Programme zeigen
        (maximale Dauer je 3 Minuten).
        Ihre Aufgabe ist es, die Programme zu verstehen.
        Danach werden wir Ihnen eine Frage zu der Funktionalität des Programms stellen.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Hello_World
    ImageComponent HelloWorldImage
      image = $example_df.iloc[0]["ImagePath"]
      size = (example_df.iloc[0]["ImagePathWidth"], example_df.iloc[0]["ImagePathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = <Weiter mit Leertaste>
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Program Comprehension
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  Routine input
    ImageComponent helloWorldInput
      image = $example_df.iloc[0]["InputPath"]
      size = (example_df.iloc[0]["InputPathWidth"], example_df.iloc[0]["ImagePathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Hier wird die Methode von eben aufgerufen.
        Wie lautet die Ausgabe?
    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        Antwortmöglichkeiten folgen:
        <Weiter mit Leertaste>
  Routine output
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent helloWorld_1
      image = $example_df.iloc[0]["RightPath"]
      pos = (ll, 0)
      size = (example_df.iloc[0]["RightPathWidth"], example_df.iloc[0]["RightPathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent helloWorld_2
      image = $example_df.iloc[0]["Wrong1Path"]
      pos = (lm, 0)
      size = (example_df.iloc[0]["Wrong1PathWidth"], example_df.iloc[0]["Wrong1PathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent helloWorld_3
      image = $example_df.iloc[0]["Wrong2Path"]
      pos = (mm, 0)
      size = (example_df.iloc[0]["Wrong2PathWidth"], example_df.iloc[0]["Wrong2PathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent helloWorld_4
      image = $example_df.iloc[0]["DontKnowPath"]
      pos = (rm, 0)
      size = (example_df.iloc[0]["DontKnowPathWidth"], example_df.iloc[0]["DontKnowPathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Fragezeichen
      image = $example_df.iloc[0]["NextPath"]
      pos = (rr, 0)
      size = (example_df.iloc[0]["NextPathWidth"], example_df.iloc[0]["NextPathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Wählen Sie mit den Pfeiltasten die passende Ausgabe.

        Wenn keine der Antwortmöglichkeiten passt, wählen Sie bitte "next".
    ImageComponent image_6
      image = Resources/arrow.png
      pos [set every frame] = (arrow_pos_array[arrow_idx_test], md)
      size = (86, 54)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        from psychopy.hardware import keyboard
        from psychopy import core

        kb = keyboard.Keyboard()

        arrow_pos_array = [ll, lm, mm, rm, rr]
        arrow_idx_test = 0
      Each Frame:
        keys = kb.getKeys(['right', 'left'], waitRelease=True)
        if 'left' in keys:
            arrow_idx_test = arrow_idx_test - 1

        if 'right' in keys:
            arrow_idx_test = arrow_idx_test + 1

        arrow_idx_test = max(0, arrow_idx_test)
        arrow_idx_test = min(4, arrow_idx_test)
  Routine Instructions
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Der Code ist immer syntaktisch korrekt,
        also ausführbar.

        Funktionsnamen, Codestruktur, Variablen etc. können ungewöhnlich sein. Lassen Sie sich davon nicht irritieren und lösen Sie die Aufgabe so gut wie möglich.

        Die zur Verfügung stehende Zeit ist sehr knapp! Das Experiment ist bewusst anspruchsvoll ausgelegt, sodass nicht alle Aufgaben gelöst werden können.

        Für "Weiter" und "einloggen" immer die Leertaste drücken.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions2
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bitte antworten Sie nur, wenn Sie das Ergebnis auch kennen.

        Genau wie in diesem Beispiel wird Ihnen immer ein Funktionsaufruf präsentiert werden, und Sie sollen die korrekte Ausgabe auswählen.

        Bitte raten Sie nicht, sondern wählen Sie "next". "next" ist besser, als eine Antwort zu raten. Am Wichtigsten ist jedoch, dass Sie sich nicht frustrieren lassen.

        Haben Sie noch Fragen?
        Nun folgt ein Trainingsbeispiel:
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingSnippet
    TextComponent text_14
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Program Comprehension
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent TestSnippet
      image = $example_df.iloc[1]["ImagePath"]
      size = (example_df.iloc[1]["ImagePathWidth"], example_df.iloc[1]["ImagePathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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  Routine TrainingInput
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent TrainingInput_2
      image = $example_df.iloc[1]["InputPath"]
      size = (example_df.iloc[1]["InputPathWidth"], example_df.iloc[1]["InputPathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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  Routine Frage
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Haben Sie noch Fragen?

        <Weiter mit Leertaste>
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SyntaxInstruction
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nun kennen Sie einen der beiden Aufgabentypen. Der andere Aufgabentyp heißt “search ”. Wir zeigen Ihnen ein Java Programm, dabei ist Ihre Aufgabe so schnell wie möglich für jede Klammer ( oder { einmal die Pfeiltaste nach unten zu drücken. Wenn Sie fertig sind, drücken Sie die Leertaste.
        Achtung! Wir suchen nur die offenen Klammern ( und {,
        andere Klammern, wie beispielsweise },), [, ] sollen ignoriert werden.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SampleSyntax
    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Hilfestellung: Klammer gefunden: <Pfeiltatste nach unten>

        <Weiter mit Leertaste>
    ImageComponent sampleSyntax
      image = $syntax_df.iloc[syntax_idx]["ImagePath"]
      pos = (0, mu)
      size = (syntax_df.iloc[syntax_idx]["ImagePathWidth"],syntax_df.iloc[syntax_idx]["ImagePathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent Pfeiltaste
      allowedKeys = 'down'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent weiter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      End Routine:
        syntax_idx += 1
  Routine Overview
    TextComponent overview
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Insgesamt machen wir 3 Durchläufe à 20 Minuten.

        Zwischen den Durchläufen machen wir eine 5 Minuten Pause.
        Dazu werden wir Ihnen während der 30s Pause Bescheid sagen.
        In dieser Zeit können Sie sich strecken, wir lüften und kontrollieren den korrekten Sitz der EEG Kappe.

        <Weiter mit Leertaste>
    ImageComponent overviewImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Warning_StartSession
    KeyboardComponent key_resp_9
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <Start der Studie mit "s">
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    ImageComponent warningStartStudy
      image = Resources\Intro\stopp.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine TrainingOutput_2
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent number1
      image = $example_df.iloc[1]["RightPath"]
      pos = (ll, 0)
      size = (example_df.iloc[1]["RightPathWidth"], example_df.iloc[1]["RightPathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent number2
      image = $example_df.iloc[1]["Wrong1Path"]
      pos = (lm, 0)
      size = (example_df.iloc[1]["Wrong1PathWidth"], example_df.iloc[1]["Wrong1PathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent number3
      image = $example_df.iloc[1]["Wrong2Path"]
      pos = (mm, 0)
      size = (example_df.iloc[1]["Wrong2PathWidth"], example_df.iloc[1]["Wrong2PathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent number4
      image = $example_df.iloc[1]["DontKnowPath"]
      pos = (rm, 0)
      size = (example_df.iloc[1]["DontKnowPathWidth"], example_df.iloc[1]["DontKnowPathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent number5
      image = $example_df.iloc[1]["NextPath"]
      pos = (rr, 0)
      size = (example_df.iloc[1]["NextPathWidth"], example_df.iloc[1]["NextPathHeight"])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_2
      image = Resources/arrow.png
      pos [set every frame] = (arrow_pos_array[arrow_idx_test], md)
      size = (86, 54)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        from psychopy.hardware import keyboard
        from psychopy import core

        kb = keyboard.Keyboard()

        arrow_pos_array = [ll, lm, mm, rm, rr]
        arrow_idx_test = 0
      Each Frame:
        keys = kb.getKeys(['right', 'left'], waitRelease=True)
        if 'left' in keys:
            arrow_idx_test = arrow_idx_test - 1

        if 'right' in keys:
            arrow_idx_test = arrow_idx_test + 1

        arrow_idx_test = max(0, arrow_idx_test)
        arrow_idx_test = min(4, arrow_idx_test)
  Routine Rest
  Routine Crossfixation
    ImageComponent image_7
      flipVert = True
      image = Resources\corss.png
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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    CodeComponent code_11
      Code Type = Py
  Routine SyntaxWarning
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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      text:
        Wir zeigen Ihnen ein Java Programm, dabei ist Ihre Aufgabe so schnell wie möglich für jede Klammer ( oder { einmal die Pfeiltaste nach unten zu drücken. Wenn Sie fertig sind, drücken Sie die Leertaste.
        Achtung! Wir suchen nur die offenen Klammern ( und {,
        andere Klammern, wie beispielsweise },), [, ] sollen ignoriert werden.
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SyntaxTask
    ImageComponent image_8
      image [set every repeat] = $syntax_df.iloc[syntax_idx]["ImagePath"]
      size [set every repeat] = (syntax_df.iloc[syntax_idx]["ImagePathWidth"], syntax_df.iloc[syntax_idx]["ImagePathHeight"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      End Routine:
        eeg_rec.refresh()
        eeg_rec.set_event(hash("SyntaxTask" + str(syntax_idx)))
        syntax_idx += 1
  Routine eeg_setup
    CodeComponent code_10
      Code Type = Py
      Before Experiment:
        from EEGTools.Recorders.LiveAmpRecorder.liveamp_recorder import LiveAmpRecorder as Recorder
        from EEGTools.Recorders.Unicorn_Recorder.unicorn_recorder import Unicorn_recorder as Recorder
      Begin Routine:
        eeg_rec = Recorder()
        eeg_rec.connect()
        eeg_rec.connect_plot()
        eeg_rec.start_recording()
  Routine EndEEG
    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        eeg_rec.refresh()
        rec.disconnect_plot()
        rec.disconnect()
        rec.save("CollectedData")
Flow
  Routine codeStartup
  Routine Hello
  Routine Instructions
  Routine Instructions2
  Routine Hello_World
  Routine input
  Routine output
  Routine TrainingSnippet
  Routine TrainingInput
  Routine TrainingOutput_2
  Routine Crossfixation
  Routine Frage
  Routine SyntaxInstruction
  Routine SampleSyntax
  Routine Crossfixation
  Routine Overview
  Routine Warning_StartSession
  Routine eeg_setup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 8
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    LoopInitiator Loop loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine SetVariables
      Routine ShowImage
      Routine ShowInput
      Routine ShowOptions
      Routine updateIndex
      Routine Crossfixation
    LoopTerminator Loop
    Routine SyntaxWarning
    Routine SyntaxTask
    Routine Crossfixation
    Routine AskToContinue
  LoopTerminator trials
  Routine EndEEG
