PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = intro_german
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Routines
  Routine Hello
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank, dass Sie an dieser Studie teilnehmen.

        In dieser Studie werden wir Ihnen kurze Java Programme zeigen
        (maximale Dauer je 3 Minuten).
        Ihre Aufgabe ist es, die Programme zu verstehen.
        Danach werden wir Ihnen eine Frage zu der Funktionalität des Programms stellen.

        Es folgt ein Beispiel
        <Weiter mit Leertaste>
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine HelloWorld
    ImageComponent HelloWorldImage
      image = Resources\Intro\helloWorld.png
      size = (0.763, 0.279)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = <Weiter mit Leertaste>
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Program Comprehension
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  Routine output
    KeyboardComponent key_resp_3
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent helloWorld_1
      image = Resources\Intro\wrong1.PNG
      pos = (-0.6, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent helloWorld_2
      image = Resources\Intro\wrong2.PNG
      pos = (-0.3, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent helloWorld_3
      image = Resources\Intro\correct.PNG
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent helloWorld_4
      image = Resources\Intro\wrong3.PNG
      pos = (0.3, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent Fragezeichen
      image = Resources\Intro\fragezeichen.PNG
      pos = (0.6, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Wählen Sie mit den Pfeiltasten die passende Ausgabe.

        Wenn keine der Antwortmöglichkeiten passt, wählen Sie bitte "?".
    ImageComponent image_3
      image = Resources\Intro\pfeil.png
      pos = (0, -0.25)
      size = (0.1, 0.3)
      startVal [time (s)] = 0.0
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  Routine input
    ImageComponent helloWorldInput
      image = Resources\Intro\helloWorldInput.png
      size = (0.834, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Hier wird die Methode von eben aufgerufen.
        Wie lautet die Ausgabe?
    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        Antwortmöglichkeiten folgen:
        <Weiter mit Leertaste>
  Routine Instructions
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Der Code ist immer syntaktisch korrekt,
        also ausführbar.

        Funktionsnamen, Codestruktur, Variablen etc. können ungewöhnlich sein. Lassen Sie sich davon nicht irritieren und lösen Sie die Aufgabe so gut wie möglich.

        Die zur Verfügung stehende Zeit ist sehr knapp! Das Experiment ist bewusst anspruchsvoll ausgelegt, sodass nicht alle Aufgaben gelöst werden können.

        Für "Weiter" und "einloggen" immer die Leertaste drücken.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingSnippet
    TextComponent text_14
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Program Comprehension
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    ImageComponent image
      image = Resources\Intro\helloWorld.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingInput
    ImageComponent image_2
      image = Resources\Intro\helloWorldInput.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingOutput
  Routine SyntaxInstruction
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nun kennen Sie einen der beiden Aufgabentypen. Der andere Aufgabentyp heißt “search ”. Wir zeigen Ihnen ein Java Programm, dabei ist Ihre Aufgabe so schnell wie möglich für jede Klammer ( oder { einmal die Pfeiltaste nach unten zu drücken. Wenn Sie fertig sind, drücken Sie die Leertaste.
        Achtung! Wir suchen nur die offenen Klammern ( und {,
        andere Klammern, wie beispielsweise },), [, ] sollen ignoriert werden.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SampleSyntax
    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Klammer gefunden: <Pfeiltatste nach unten>
        z.B. 5 Klammern = 5 mal Pfeiltaste nach unten drücken

        <Weiter mit Leertaste>
    ImageComponent sampleSyntax
      image = Resources\Intro\helloWorld.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent Pfeiltaste
      allowedKeys = 'down'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent weiter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rest
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sehr gut!

        Nach jeder Aufgabe erscheint für 30 Sekunden ein kleines Kreuz auf dem Bildschirm. Nutzen Sie diese Zeit, um sich auszuruhen.

        Um früher fortzufahren: <Leertaste>
  Routine Overview
    TextComponent overview
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Insgesamt machen wir 3 Durchläufe à 20 Minuten.

        Zwischen den Durchläufen machen wir eine 5 Minuten Pause.
        Dazu werden wir Ihnen während der 30s Pause Bescheid sagen.
        In dieser Zeit können Sie sich strecken, wir lüften und kontrollieren den korrekten Sitz der EEG Kappe.

        <Weiter mit Leertaste>
    ImageComponent overviewImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Warning_StartSession
    KeyboardComponent key_resp_9
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <Start der Studie mit "s">
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    ImageComponent warningStartStudy
      image = Resources\Intro\stopp.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Instructions2
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bitte Antworten Sie nur, wenn Sie das Ergebnis auch kennen.

        Genau wie in diesem Beispiel wird Ihnen immer ein Funktionsaufruf präsentiert werden, und Sie sollen die korrekte Ausgabe auswählen.

        Bitte raten Sie nicht, sondern wählen Sie "?". "?" ist besser, als eine Antwort zu raten. Am Wichtigsten ist jedoch, dass Sie sich nicht frustrieren lassen.

        Haben Sie noch Fragen?
        Nun folgt ein Trainingsbeispiel:
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Frage
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Haben Sie noch Fragen?

        <Weiter mit Leertaste>
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingOutput_2
    KeyboardComponent key_resp_14
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent helloWorld
      image = Resources\Intro\wrong1.PNG
      pos = (-0.6, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent helloWorld_5
      image = Resources\Intro\wrong2.PNG
      pos = (-0.3, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent helloWorld_6
      image = Resources\Intro\correct.PNG
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent helloWorld_7
      image = Resources\Intro\wrong3.PNG
      pos = (0.3, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent Fragezeichen_2
      image = Resources\Intro\fragezeichen.PNG
      pos = (0.6, 0)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = Resources\Intro\pfeil.png
      pos = (0, -0.25)
      size = (0.1, 0.3)
      startVal [time (s)] = 0.0
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  Routine Rest_crossfixation
    ImageComponent restImage_2
      image = Resources\Intro\rest.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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Flow
  Routine Hello
  Routine HelloWorld
  Routine input
  Routine output
  Routine Instructions
  Routine Instructions2
  Routine TrainingSnippet
  Routine TrainingInput
  Routine TrainingOutput_2
  Routine Rest
  Routine Rest_crossfixation
  Routine Frage
  Routine SyntaxInstruction
  Routine SampleSyntax
  Routine Rest_crossfixation
  Routine Overview
  Routine Warning_StartSession
