PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.5,0.5,0.5]
  expName = test
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Routines
  Routine ShowImage
    ImageComponent Image
      image [set every repeat] = $current_image_path
      size [set every repeat] = [width, height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      units = pix
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    KeyboardComponent response
      allowedKeys = 'left', 'down', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      End Routine:
        thisExp.addData("path", inbook.iloc[current_idx]["ImagePathWidth"])
  Routine AskToContinue
    TextComponent continuQuestion
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Möchtest du weitermachen?
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    KeyboardComponent stop
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine codeStartup
    CodeComponent codeInit
      Code Type = Py
      Before Experiment:
        import random, xlrd
        import socket
        import pandas as pd

        global current_image_path

        random.seed()

        in_file = "conditions.xlsx"

        num_items = 32
        num_iter = 5
        idx_values = [x for x in range(num_items)]

        TCP_IP = 'localhost'
        TCP_PORT = 50000
        Message = 1

        from psychopy import monitors

        mon = None
        for tmp_mon in monitors.getAllMonitors():
            mon = tmp_mon

        width = monitors.Monitor(mon).getSizePix()[0]
        height = monitors.Monitor(mon).getSizePix()[1]
        ll = -0.8 * width
        lm = -0.4 * width
        mm = 0.0 * width
        rm = 0.4 * width
        rr = 0.8 * width
        md = -0.1 * height
      Begin Experiment:
        #open execl
        inbook = pd.read_excel(in_file)

        random.shuffle(idx_values)
        current_idx = idx_values.pop(0)
  Routine SendSignal
    CodeComponent sender
      Code Type = Py
      End Routine:
        #s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        #s.connect((TCP_IP, TCP_PORT))
        #s.send(Message.to_bytes(1, 'big'))
        #Message = Message + 1
        #s.close()
  Routine ShowInput
    ImageComponent image
      image [set every repeat] = $current_input_path
      size [set every repeat] = [input_width, input_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'left', 'down', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      store = nothing
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  Routine SetVariables
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        current_image_path = inbook.iloc[current_idx]["ImagePath"]
        width = inbook.iloc[current_idx]["ImagePathWidth"]
        height = inbook.iloc[current_idx]["ImagePathHeight"]

        current_input_path = inbook.iloc[current_idx]["InputPath"]
        input_width = inbook.iloc[current_idx]["InputPathWidth"]
        input_height = inbook.iloc[current_idx]["InputPathHeight"]

        right_path = inbook.iloc[current_idx]["RightPath"]
        right_width = inbook.iloc[current_idx]["RightPathWidth"]
        right_height = inbook.iloc[current_idx]["RightPathHeight"]

        wrong1_input_path = inbook.iloc[current_idx]["Wrong1Path"]
        wrong1_width = inbook.iloc[current_idx]["Wrong1PathWidth"]
        wrong1_height = inbook.iloc[current_idx]["Wrong1PathHeight"]

        wrong2_input_path = inbook.iloc[current_idx]["Wrong2Path"]
        wrong2_width = inbook.iloc[current_idx]["Wrong2PathWidth"]
        wrong2_height = inbook.iloc[current_idx]["Wrong2PathHeight"]

        dk_input_path = inbook.iloc[current_idx]["DontKnowPath"]
        dk_width = inbook.iloc[current_idx]["DontKnowPathWidth"]
        dk_height = inbook.iloc[current_idx]["DontKnowPathHeight"]

        next_input_path = inbook.iloc[current_idx]["NextPath"]
        next_width = inbook.iloc[current_idx]["NextPathWidth"]
        next_height = inbook.iloc[current_idx]["NextPathHeight"]
  Routine updateIndex
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        current_idx = idx_values.pop(0)
  Routine ShowOptions
    ImageComponent image_1
      image [set every repeat] = $right_path
      pos [set every repeat] = (ll, 0)
      size [set every repeat] = [right_width, right_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent image_2
      image [set every repeat] = $wrong1_input_path
      pos [set every repeat] = (lm, 0)
      size [set every repeat] = [wrong1_width, wrong1_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent image_3
      image [set every repeat] = $wrong2_input_path
      pos [set every repeat] = (mm, 0)
      size [set every repeat] = [wrong2_width, wrong2_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent image_4
      image [set every repeat] = $dk_input_path
      pos [set every repeat] = (rm, 0)
      size [set every repeat] = [dk_width, dk_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent image_5
      image [set every repeat] = $next_input_path
      pos [set every repeat] = (rr, 0)
      size [set every repeat] = [next_width, next_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    ImageComponent arrow
      image [set every repeat] = Resources/arrow.png
      pos [set every frame] = (arrow_position, md)
      size = (86, 54)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = pix
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        from psychopy.hardware import keyboard
        from psychopy import core

        kb = keyboard.Keyboard()

        current = 0
        position_array = [ll, lm, mm, rm, rr]
        arrow_position = position_array[current]
      Each Frame:
        keys = kb.getKeys(['right', 'left'], waitRelease=True)
        if 'left' in keys:
            current = current - 1

        if 'right' in keys:
            current = current + 1

        current = max(0, current)
        current = min(4, current)

        arrow_position = position_array[current]
    KeyboardComponent key_resp_3
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine codeStartup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 7
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    LoopInitiator Loop loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine SendSignal
      Routine SetVariables
      Routine ShowImage
      Routine ShowInput
      Routine ShowOptions
      Routine updateIndex
    LoopTerminator Loop
    Routine AskToContinue
  LoopTerminator trials
